OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x9f5c4075 = MFL

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Display cue image => #1
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_Label_00
  Cue Image 1 = C:/Program Files (x86)/openvibe-2.0/share/openvibe/plugins/simple-visualisation/p300-magic-card/11.png
  Stimulation 1 = OVTK_StimulationId_Label_01
Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input signal=#2.Signal stream, Input stimulations=#1 -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_00
Data=#2.Signal stream, Stimulations=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

CSV File Writer
  Filename = C:/Wenlong Li/Master/2.Semester/Praktikum Biosignal/Recording/RightEyeBlink4
  Precision = 2
  Append data = false
  Only last matrix = false
